PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TrainingTask_PreTest
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine WelcomeScreen
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    CodeComponent GlobalCam
      Code Type = Auto->JS
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      Begin Experiment:
        import cv2, threading, csv, atexit
        from psychopy import core

        CAM_INDEX = 1                       # 0 = built-in, 1 = external USB C270
        REQ_W, REQ_H, REQ_FPS = 640, 480, 30
        EXPOSURE = -6                       # try -5, -6, -7 (more negative = darker but higher fps)

        class CamRecorder:
            def __init__(self, index, video_path, csv_path):
                self.ok = False
                self.n = 0              # real frames captured
                self.written = 0        # frames written to the video file
                self.fps = float(REQ_FPS)
                self._stop = threading.Event()
                self.cap = cv2.VideoCapture(index, cv2.CAP_DSHOW)
                self.cap.set(cv2.CAP_PROP_FRAME_WIDTH, REQ_W)
                self.cap.set(cv2.CAP_PROP_FRAME_HEIGHT, REQ_H)
                self.cap.set(cv2.CAP_PROP_FOURCC, cv2.VideoWriter_fourcc(*"MJPG"))
                self.cap.set(cv2.CAP_PROP_FPS, REQ_FPS)
                self.cap.set(cv2.CAP_PROP_AUTO_EXPOSURE, 0.25)   # manual exposure mode
                self.cap.set(cv2.CAP_PROP_EXPOSURE, EXPOSURE)
                if not (self.cap.isOpened() and self.cap.read()[0]):
                    print("Camera failed to open. Running without recording.")
                    return
                w = int(self.cap.get(cv2.CAP_PROP_FRAME_WIDTH))
                h = int(self.cap.get(cv2.CAP_PROP_FRAME_HEIGHT))
                fc = int(self.cap.get(cv2.CAP_PROP_FOURCC))
                fmt = "".join(chr((fc >> 8 * i) & 0xFF) for i in range(4))
                self.writer = cv2.VideoWriter(
                    video_path, cv2.VideoWriter_fourcc(*"MJPG"), self.fps, (w, h))
                self._csvfile = open(csv_path, "w", newline="")
                self._csv = csv.writer(self._csvfile)
                self._csv.writerow(["real_frame", "video_frame", "psychopy_time"])
                self.t_first = None
                self.t_last = None
                self.ok = True
                print(f"Camera OK: {w}x{h}, format {fmt}, file written at {self.fps} fps")
                self.thread = threading.Thread(target=self._loop, daemon=True)
                self.thread.start()

            def _loop(self):
                t0 = None
                while not self._stop.is_set():
                    ok, frame = self.cap.read()
                    t = core.getTime()
                    if not ok:
                        continue
                    if t0 is None:
                        t0 = t
                        self.t_first = t
                    self.t_last = t
                    # number of frames the file should contain at this instant
                    target = int((t - t0) * self.fps) + 1
                    first_idx = self.written
                    while self.written < target:
                        self.writer.write(frame)
                        self.written += 1
                    # real frame -> index of the first video-file frame that represents it
                    self._csv.writerow([self.n, first_idx, t])
                    self.n += 1

            def stop(self):
                if not self.ok:
                    return
                self.ok = False
                self._stop.set()
                self.thread.join(timeout=2)
                self.writer.release()
                self.cap.release()
                self._csvfile.close()
                if self.t_last and self.t_first and self.t_last > self.t_first:
                    dur = self.t_last - self.t_first
                    print(f"Actual camera fps: {self.n / dur:.1f} "
                          f"({self.n} real frames, {self.written} in file, {dur:.1f} s)")

        try:
            base = filename
        except NameError:
            base = thisExp.dataFileName

        video_path = base + "_cam.avi"
        csv_path = base + "_cam_timestamps.csv"
        rec = CamRecorder(CAM_INDEX, video_path, csv_path)
        atexit.register(rec.stop)
      Each Frame:
        thisExp.addData("cam_frame_at_stim", rec.n)
        thisExp.addData("cam_time_at_stim", core.getTime())
      End Experiment:
        rec.stop()
        print("Saved Capture.")
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Irá iniciar a tarefa. A mesma consiste na apresentação de um contraste à direita/esquerda. Indique em cada trial o lado do estímulo utilizando a tecla -S- para o lado esquerdo e  -L- para o lado direito.

        Pedimos que mantenha o olhar no centro do ecrã durante a experiência

        Pressione a SPACEBAR para começar
    KeyboardComponent key_respWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
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    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Chegou ao fim da tarefa.

        Enviaremos os leaderboard da sessão por email. Constará apenas o número de ID, garantido o seu anonimato. Caso tenha interesse em participar pressione -y-, caso contrário pressione -n-.
    CodeComponent codepartID
      Code Type = Auto->JS
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      End Routine:
        selected_key = None


        if keyLeaderBoard.keys and len(keyLeaderBoard.keys) > 0:
            if isinstance(keyLeaderBoard.keys, list):
                selected_key = keyLeaderBoard.keys[0]
            else:
                selected_key = keyLeaderBoard.keys


        end_msg = "Obrigado pela sua participação!"

        if selected_key == 'y':
            end_msg += f"\nEste é o seu ID de participante: {expInfo['participant']}.\n Guarde este número para verificar onde ficou colocado"
        elif selected_key == 'n':
            end_msg += f"\nO seu ID não aparecerá no leaderboard."
    KeyboardComponent keyLeaderBoard
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Blank4000
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    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine FullTaskTrials
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  Routine InstructionsFull
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    TextComponent textFull
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Explicação para full task
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    KeyboardComponent key_resp_Full
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause
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    CodeComponent codeLevels
      Code Type = Auto->JS
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      Begin Routine:
        # Lista de níveis atualizada sem cores cinzentas
        levels_config = [
            {"min_score": 0,   "name": "Recruta",      "color": "#FFFFFF"},  # Branco (Contraste total com o fundo cinzento)
            {"min_score": 50,  "name": "Iniciante",    "color": "#CD7F32"},  # Bronze / Castanho Quente
            {"min_score": 100, "name": "Explorador",   "color": "#4CAF50"},  # Verde
            {"min_score": 150, "name": "Praticante",   "color": "#00BCD4"},  # Ciano / Azul Claro
            {"min_score": 200, "name": "Especialista", "color": "#2196F3"},  # Azul
            {"min_score": 250, "name": "Perito",       "color": "#9C27B0"},  # Roxo
            {"min_score": 300, "name": "Mestre",       "color": "#E91E63"},  # Rosa Forte
            {"min_score": 350, "name": "Guru",         "color": "#FF9800"},  # Laranja
            {"min_score": 400, "name": "Lenda",        "color": "#FFD700"}   # Dourado
        ]

        current_level = levels_config[0]
        next_level = None

        for level in levels_config:
            if score >= level["min_score"]:
                current_level = level
            else:
                next_level = level
                break

        level_name = current_level["name"]
        level_color = current_level["color"]


        text_pause = f"Pausa\nPossui neste momento {score} pontos\n"

        if score >= 400:
            text_pause += f"Nível {level_name}\nNível Máximo Atingido!"
        else:
            pontos_em_falta = next_level["min_score"] - score
            text_pause += f"Nível {level_name}\nFaltam {pontos_em_falta} pontos para o próximo nível"
    TextComponent textPause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 15
      text [set every frame] = $text_pause
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    TextComponent Returntotasktext
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 20
      text = Carrega na SPACEBAR para recomeçar
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine Tutorial
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    SoundComponent soundTutGoCue
      forceEndRoutine = False
      sound [set every repeat] = 5000
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
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    PolygonComponent polygonHorizontalTut
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_widthT
      ori [set every frame] = 180
      pos [set every frame] = fixation_posT
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_sizeT
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    PolygonComponent polygonVerticalTut
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_widthT
      ori [set every frame] = 90
      pos [set every frame] = fixation_posT
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_sizeT
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    GratingComponent gaborTut
      contrast [set every repeat] = gratingT
      mask [set every frame] = $maskT
      ori [set every frame] = orientationT
      phase [set every frame] = 0
      pos [set every frame] = positionT
      sf [set every frame] = spacial_freqT
      size [set every frame] = sizeT
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      tex [set every frame] = $textureT
      texture resolution = 256
      units = deg
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    CodeComponent codePhaseT
      Code Type = Auto->JS
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      Begin Routine:
        # Generate random phase
        current_phaseT = np.random.uniform(0, 2 * np.pi)

        gaborTut.phase = current_phaseT

        # Creates a gabor phase column on the csv
        thisExp.addData('gabor_phaseT', current_phaseT)
    CodeComponent codeCorKeyTut
      Code Type = Auto->JS
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      End Routine:
        corans = False

        if position[0] > 0 and gabor.pos[0] == 0.0:
            corans = True


        elif position[0] < 0 and gabor.pos[0] == 0.0:
            corans = True




        thisExp.addData('Correct answer', corans)
    KeyboardComponent keySideTut
      allowedKeys = 's','l'
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 1.00
      stopVal [duration (s)] = 10
      storeCorrect = True
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    CodeComponent codeMoveT
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard as psy_keyboard

        kbd = psy_keyboard.Keyboard()
      Begin Routine:
        try:

            if hasattr(position[0], '__iter__') or isinstance(position[0], (list, tuple)):
                pos_x = float(position[0][0])
                pos_y = float(position[0][1])
            else:
                pos_x = float(position[0])
                pos_y = float(position[1])
        except Exception:
            pos_x = 0.0
            pos_y = 0.0


        kbd.clearEvents()
      Each Frame:
        pressed_keys = kbd.getKeys(keyList=['left', 'right'], waitRelease=False, clear=False)

        step = 0.5

        if pressed_keys:
            active = [t.name for t in pressed_keys if t.duration is None]

            if 'left' in active:
                pos_x -= step
            if 'right' in active:
                pos_x += step

        gabor.pos = [pos_x, pos_y]

        if position[0] > 0 and pos_x < 0.0:
            pos_x = 0.0
            continueRoutine = False

        elif position[0] < 0 and pos_x > 0.0:
            pos_x = 0.0
            continueRoutine = False


        gabor.pos = [pos_x, pos_y]
  Routine InstructionsTutorial
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    TextComponent textTutorial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Irá realizar uma pequena sessão de treino.

        Quando o estímulo aparecer do lado direito pressione -L- e quando aparecer do lado esquerdo pressione -S-

        Estas respostas não serão contabilizadas.

        Pressione SPACEBAR para iniciar
    KeyboardComponent key_resp_tutorial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine TutFeedback
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    CodeComponent codeFcondTut
      Code Type = Auto->JS
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      Begin Experiment:
        scoreT = 0
      Begin Routine:
        if corans:
            scoreT += 1
            text_feedback = f"Correto!\n+1 point\nTotal: {scoreT}"
            win.color = "green"
            sound_feedback = 4000
            durationtextT = 0.5
            volume = 1
            duration = 0.25
        else:
            scoreT += 0
            text_feedback = f"Errado!\n+0 points\nTotal: {scoreT}"
            win.color = "red"
            sound_feedback = "sound_files/ibl_noise_burst.wav"
            durationtextT = 1
            volume = 1
            duration = 0.5

        win.flip()
      End Routine:
        win.color="gray"
    TextComponent textFBTut
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = durationtextT
      text [set every frame] = $text_feedback
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    SoundComponent soundFBTut
      forceEndRoutine = False
      sound [set every repeat] = $sound_feedback 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine InstructionsFullTask
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    TextComponent textFullTask
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Irá iniciar a tarefa completa.

        Quando o estímulo aparecer do lado direito pressione -L- e quando aparecer do lado esquerdo pressione -S-

        Pressione SPACEBAR para iniciar
    KeyboardComponent keyRespFullTask
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine pretest1Tutorial
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  Routine blank2000
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    TextComponent textBlankInst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine IDScreen
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    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every frame]:
        $end_msg
  Routine CameraTest
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    CameraComponent cam
      deviceLabel = WebCam
      saveFile = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 50
      syncScreenRefresh = False
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  Routine FullTask
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    SoundComponent soundGoCue
      forceEndRoutine = False
      sound [set every repeat] = 5000
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
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    PolygonComponent polygonVertical
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_width
      ori [set every frame] = 90
      pos [set every frame] = fixation_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    PolygonComponent polygonHorizontal
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_width
      ori [set every frame] = 180
      pos [set every frame] = fixation_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    GratingComponent gabor
      contrast [set every repeat] = grating
      mask [set every frame] = $mask
      ori [set every frame] = orientation
      phase [set every frame] = 0
      pos [set every frame] = position
      sf [set every frame] = spacial_freq
      size [set every frame] = size
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3.00
      tex [set every frame] = $texture
      texture resolution = 256
      units = deg
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    CodeComponent codePhase
      Code Type = Auto->JS
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      Begin Routine:
        # Generate random phase
        current_phase = np.random.uniform(0, 2 * np.pi)

        gabor.phase = current_phase

        # Creates a gabor phase column on the csv
        thisExp.addData('gabor_phase', current_phase)
    CodeComponent codeCorKey
      Code Type = Auto->JS
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      Begin Experiment:
        total_task_timer = core.Clock()
      End Routine:
        corans = False

        if position[0] > 0 and gabor.pos[0] == 0.0:
            corans = True


        elif position[0] < 0 and gabor.pos[0] == 0.0:
            corans = True




        thisExp.addData('Correct answer', corans)

        total_task_time = total_task_timer.getTime()
        print(f"TOTAL TASK TIME: {total_task_time:.2f} SECONDS\n")
    CodeComponent codeMove
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard as psy_keyboard

        kbd = psy_keyboard.Keyboard()
      Begin Routine:
        try:

            if hasattr(position[0], '__iter__') or isinstance(position[0], (list, tuple)):
                pos_x = float(position[0][0])
                pos_y = float(position[0][1])
            else:
                pos_x = float(position[0])
                pos_y = float(position[1])
        except Exception:
            pos_x = 0.0
            pos_y = 0.0


        kbd.clearEvents()
      Each Frame:
        pressed_keys = kbd.getKeys(keyList=['left', 'right'], waitRelease=False, clear=False)

        step = 0.5

        if pressed_keys:
            active = [t.name for t in pressed_keys if t.duration is None]

            if 'left' in active:
                pos_x -= step
            if 'right' in active:
                pos_x += step

        gabor.pos = [pos_x, pos_y]

        if position[0] > 0 and pos_x < 0.0:
            pos_x = 0.0
            continueRoutine = False

        elif position[0] < 0 and pos_x > 0.0:
            pos_x = 0.0
            continueRoutine = False


        gabor.pos = [pos_x, pos_y]
  Routine FullTaskFeedback
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    CodeComponent codeFconditions
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
      Begin Routine:
        if corans:
            score += 1
            text_feedback = f"Correto!\n+1 point\nTotal: {score}"
            win.color = "green"
            sound_feedback = 4000
            durationtext = 0.5
            volume = 1
            duration = 0.25
        else:
            score += 0
            text_feedback = f"Errado!\n+0 points\nTotal: {score}"
            win.color = "red"
            sound_feedback = "sound_files/ibl_noise_burst.wav"
            durationtext = 1.5
            volume = 1
            duration = 0.5


        win.flip()
      End Routine:
        win.color="gray"
    TextComponent textFeedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = durationtext
      text [set every frame] = $text_feedback
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    SoundComponent soundFeedback
      forceEndRoutine = False
      sound [set every repeat] = $sound_feedback 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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Flow
  Routine WelcomeScreen
  Routine blank2000
  Routine InstructionsTutorial
  LoopInitiator PreTest1TrialsTut loopType="TrialHandler"
    conditionsFile = Conditions_Tut.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'positionT': (15, 0), 'gratingT': 0.025, 'textureT': 'sin', 'maskT': 'gauss', 'spacial_freqT': 1, 'orientationT': 0, 'sizeT': (7, 7), 'fixation_posT': (0, 0), 'fixation_sizeT': (2, 0.1), 'fixation_widthT': 0.08},
      {'positionT': (-15, 0), 'gratingT': 0.025, 'textureT': 'sin', 'maskT': 'gauss', 'spacial_freqT': 1, 'orientationT': 0, 'sizeT': (7, 7), 'fixation_posT': (0, 0), 'fixation_sizeT': (2, 0.1), 'fixation_widthT': 0.08},
      {'positionT': (15, 0), 'gratingT': 1, 'textureT': 'sin', 'maskT': 'gauss', 'spacial_freqT': 1, 'orientationT': 0, 'sizeT': (7, 7), 'fixation_posT': (0, 0), 'fixation_sizeT': (2, 0.1), 'fixation_widthT': 0.08},
      {'positionT': (-15, 0), 'gratingT': 1, 'textureT': 'sin', 'maskT': 'gauss', 'spacial_freqT': 1, 'orientationT': 0, 'sizeT': (7, 7), 'fixation_posT': (0, 0), 'fixation_sizeT': (2, 0.1), 'fixation_widthT': 0.08}]
    Routine Tutorial
    Routine TutFeedback
  LoopTerminator PreTest1TrialsTut
  Routine Blank4000
  Routine InstructionsFullTask
  LoopInitiator Pretest1Block loopType="TrialHandler"
    loopType = random
    nReps = 15
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    LoopInitiator pretest1trialsTraining loopType="TrialHandler"
      conditionsFile = Conditions_parameters.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [{'position': (30, 0), 'grating': 0, 'texture': 'sin', 'mask': 'gauss', 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (-30, 0), 'grating': 0, 'texture': 'sin', 'mask': 'gauss', 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (30, 0), 'grating': 0.02, 'texture': 'sin', 'mask': 'gauss', 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (-30, 0), 'grating': 0.02, 'texture': 'sin', 'mask': 'gauss', 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (30, 0), 'grating': 0.04, 'texture': 'sin', 'mask': 'gauss', 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (-30, 0), 'grating': 0.04, 'texture': 'sin', 'mask': 'gauss', 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (30, 0), 'grating': 0.08, 'texture': 'sin', 'mask': 'gauss', 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08}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
      Routine FullTask
      Routine FullTaskFeedback
    LoopTerminator pretest1trialsTraining
    Routine Pause
  LoopTerminator Pretest1Block
  Routine Blank4000
  Routine GoodbyeScreen
  Routine IDScreen
