PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TrainingTask_Test
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent textExplanation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Irá iniciar a tarefa. A mesma consiste na apresentação de um contraste à direita/esquerda. Indique em cada trial o lado do estímulo utilizando a tecla -S- para o lado esquerdo e  -L- para o lado direito.

        Pedimos que mantenha o olhar no centro do ecrã durante a experiência

        Pressione a SPACEBAR para começar
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
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    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Obrigado pela sua participação
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  Routine Blank4000
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    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine TrialFeedback
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    CodeComponent codeFconditions
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
      Begin Routine:
        print("correct_ans =", correct_ans, type(correct_ans))
        print("keySide =", keySide, type(keySide))

        if correct_ans == keySide.keys:
            score += 1
            text_feedback = f"Correct!\n+1 point\nTotal: {score}"
            win.color = "green"
            sound_feedback = 4000
            volume = 1
            duration = 0.5
        else:
            score += 0
            text_feedback = f"Wrong!\n+0 points\nTotal: {score}"
            win.color = "red"
            sound_feedback = 1000
            volume = 1
            duration = 1

        if abs(stimPos) <= centreThreshold:

            score += 1

            text_feedback = "Correct!\n+1 point"
            win.color = "green"

        else:

            text_feedback = "Wrong!"
            win.color = "red"

        win.flip()
      End Routine:
        win.color="gray"
    TextComponent textFeedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
      text [set every frame] = $text_feedback
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    SoundComponent soundFeedback
      forceEndRoutine = False
      sound [set every repeat] = $sound_feedback 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine GratingTrials
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    PolygonComponent polygonVertical
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_width
      ori [set every frame] = 90
      pos [set every frame] = fixation_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    PolygonComponent polygonHorizontal
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_width
      ori [set every frame] = 180
      pos [set every frame] = fixation_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    GratingComponent gabor
      contrast [set every repeat] = grating
      mask [set every repeat] = $mask
      ori [set every frame] = orientation
      phase [set every frame] = phase
      pos [set every frame] = position
      sf [set every frame] = spacial_freq
      size [set every frame] = size
      startVal [time (s)] = 1.00
      stopVal [duration (s)] = 3.00
      tex [set every frame] = $texture
      texture resolution = 256
      units = deg
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    CodeComponent codeCorKey
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import joystick

        joy = joystick.Joystick(0)
      Begin Routine:
        stimPos = position[0]
        centre = joy.getAllAxes()[0]

        if stimPos > 0:
            direction = -1      # da direita para o centro
        else:
            direction = 1       # da esquerda para o centro

        # colocar o estímulo na posição inicial
        gabor.setPos((stimPos, 0))

        # velocidade
        speed = 2

        # distância ao centro para considerar resposta correta
        centreThreshold = 0.5

        if position[0] > 0:
            correct_ans = "l"
        else:
            correct_ans = "s"
      Each Frame:
        x = joy.getAllAxes()[0] - centre
        print(x)
    KeyboardComponent keySide
      allowedKeys = 's','l'
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      storeCorrect = True
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Flow
  Routine WelcomeScreen
  Routine Blank4000
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Components_parameters.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'position': (35, 0), 'grating': 0.1, 'texture': 'sin', 'mask': 'gauss ', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (35, 0), 'grating': 0.1, 'texture': 'sin', 'mask': 'gauss ', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'correct_ans': 's', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (35, 0), 'grating': 0.09, 'texture': 'sin', 'mask': 'gauss ', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (-35, 0), 'grating': 0.09, 'texture': 'sin', 'mask': 'gauss ', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'correct_ans': 's', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (-35, 0), 'grating': 0.08, 'texture': 'sin', 'mask': 'gauss ', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (-35, 0), 'grating': 0.08, 'texture': 'sin', 'mask': 'gauss ', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'correct_ans': 's', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08}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
    Routine GratingTrials
    Routine TrialFeedback
  LoopTerminator trials
  Routine Blank4000
  Routine GoodbyeScreen
